# 1 "/root/.topspin-BladeEpu/local_acqu/simulDirs/ppDirs/2D13CDEPTSE.chpa"
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;2D13CDEPTSE.chpa
;avance-version (26/12/18)
;INEPT for non-selective polarization transfer (DOSY)
;with decoupling during acquisition 13C/15N
;
;$CLASS=HighRes
;$DIM=2D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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
define list<gradient> diff=<Difframp>

"p2=p1*2"
"p4=p3*2"
"d3=1s/(cnst2*cnst11)-p50-10u-200u"
"d4=1s/(cnst2*4)"
"d12=20u"
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"DELTA=d20-p2-p50-200u"


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; dimension 2D; AQ_mode  (F1) QF
define delay MCWRK
define delay MCREST
define loopcounter t1loop
"t1loop=0"
define loopcounter ph1loop
"ph1loop=0"
define loopcounter ST1CNT
"ST1CNT = trunc(td1 / 1)"
"MCREST = 30m - 30m"
"MCWRK = 0.250000*30m"
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1 ze 
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LBLAV, MCWRK
      MCWRK
      "phval0 = t1loop * 1"
      MCWRK setgrad diff
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2 MCWRK  * 3 do:f2  do:f3
LBLST1, MCWRK 
  MCREST
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  d1
3 50u setrtp0|0 ctrlgrad 0  
  d12 pl2:f2 
  (p3 ph1):f2 
  d4
  (center (p4 ph2):f2 (p1 ph4) )
  d4
  (center (p3*0.5 ph3):f2 (p2 ph5) )
  d4
  p30:gp6*diff
  200u
  DELTA*0.5
  (p2 ph5):f1
  DELTA*0.5
  p30:gp6*diff
  200u pl12:f2 pl13:f3
  4u setrtp0^0 ctrlgrad 4047
  go=2 ph31 cpd2:f2 cpd3:f3
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  MCWRK  do:f2 do:f3 wr #0 if #0 zd 

  "t1loop+=1"
      MCWRK
      "phval0 = t1loop * 1"
      MCWRK setgrad diff
  lo to LBLST1 times ST1CNT
  MCWRK 
  "t1loop=0"
  MCWRK rf #0
  lo to LBLAV times tdav
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exit
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ph1=0 2
ph2=1 
ph3=1 
ph4=0 0 0 0 0 0 0 0 1 1 1 1 1 1 1 1 2 2 2 2 2 2 2 2 3 3 3 3 3 3 3 3
ph5=1 1 2 2 3 3 0 0
ph31=0 2 0 2 0 2 0 2 1 3 1 3 1 3 1 3 2 0 2 0 2 0 2 0 3 1 3 1 3 1 3 1


;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;pl12: f2 channel - power level for CPD/BB decoupling
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p4 : f2 channel - 180 degree high power pulse
;d1 : relaxation delay; 1-5 * T1
;d4 : 1/(4J(XH))
;d12: delay for power switching                      [20 usec]
;cnst2: = J(XH)
;cnst11: 6  XH, XH2, XH3 positive
;        4  XH only
;        3  XH, XH3 positive, XH2 negative
;ns: 4 * n, total number of scans: NS * TD0
;ds: 16
;cpd2: decoupling according to sequence defined by cpdprg2
;pcpd2: f2 channel - 90 degree pulse for decoupling sequence
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;$Id: ineptrd,v 1.11 2012/01/31 17:49:26 ber Exp $
